CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "NUC")
    Name to assign these images:NUC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:NUC
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the output objects:ExpNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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    Retain the outlines of the identified objects?:No
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:ExpNuclei

FilterObjects:[module_num:8|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
    Name the output objects:FilteredNuc
    Select the object to filter:ExpNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:PrimaryOutlines
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.02
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:FilteredNuc
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:GFP
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    Name the outline image:SecondaryOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Name the new primary object outlines:FilteredNucleiOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:2
    Select an image to measure:GFP
    Select an image to measure:NUC
    Select objects to measure:FilteredNuc
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureTexture:[module_num:12|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:GFP
    Select objects to measure:Cells
    Texture scale to measure:5
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

SaveImages:[module_num:13|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cell
    Saved file format:tif
    Output file location:Default Output Folder|D:\\\\\\\\Work\\\\\\\\Granulometry\\\\\\\\Results\\\\\\\\CPResults
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:PrimaryOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucOutlines
    Saved file format:tif
    Output file location:Default Output Folder|D:\\\\\\\\Work\\\\\\\\Granulometry\\\\\\\\Results\\\\\\\\CPResults
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:SecondaryOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytOutlines
    Saved file format:tif
    Output file location:Default Output Folder|D:\\\\\\\\Work\\\\\\\\Granulometry\\\\\\\\Results\\\\\\\\CPResults
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :ExpNuclei|Intensity_MassDisplacement_GFP,ExpNuclei|Intensity_MinIntensity_GFP,ExpNuclei|Intensity_StdIntensity_GFP,ExpNuclei|Intensity_IntegratedIntensityEdge_GFP,ExpNuclei|Intensity_MinIntensityEdge_GFP,ExpNuclei|Intensity_LowerQuartileIntensity_GFP,ExpNuclei|Intensity_UpperQuartileIntensity_GFP,ExpNuclei|Intensity_MADIntensity_GFP,ExpNuclei|Intensity_MeanIntensity_GFP,ExpNuclei|Intensity_MeanIntensityEdge_GFP,ExpNuclei|Intensity_MaxIntensityEdge_GFP,ExpNuclei|Intensity_MaxIntensity_GFP,ExpNuclei|Intensity_MedianIntensity_GFP,ExpNuclei|Intensity_StdIntensityEdge_GFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:17|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|D:\\\\\\\\Work\\\\\\\\Granulometry\\\\\\\\Results\\\\\\\\CPResults
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CPA images via URL?:Yes
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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